# mfp=30 weak fog — barrel φ-z profile (GPU, BEAM kernel). Beam ø4mm (cutoff 2mm).
s:Ph/ListName     = "Optical"
s:Ph/Optical/Type = "Geant4_Modular"
sv:Ph/Optical/Modules = 2 "g4em-standard_opt4" "gpuoptical"
i:Ph/Default/GPUOptical/LogLevel = 0
i:Ts/NumberOfThreads = 1
i:Ts/Seed = 42
b:Ts/UseQt = "False"
b:Gr/Enable = "False"
b:Ts/QuitIfManyHistoriesSeemAnomalous = "False"

dv:Ma/Air/RIndex/Energies = 2 1.5 5.0 eV
uv:Ma/Air/RIndex/Values   = 2 1.0 1.0
dv:Ma/Air/AbsLength/Energies = 2 1.5 5.0 eV
dv:Ma/Air/AbsLength/Values   = 2 1e6 1e6 cm

sv:Ma/MieMat/Components = 1 "Hydrogen"
uv:Ma/MieMat/Fractions  = 1 1.0
d:Ma/MieMat/Density     = 0.001 g/cm3
b:Ma/MieMat/EnableOpticalProperties = "True"
dv:Ma/MieMat/RIndex/Energies = 2 1.5 5.0 eV
uv:Ma/MieMat/RIndex/Values   = 2 1.0 1.0
dv:Ma/MieMat/AbsLength/Energies = 2 1.5 5.0 eV
dv:Ma/MieMat/AbsLength/Values   = 2 1e6 1e6 cm
dv:Ma/MieMat/MIEHG/Energies     = 2 1.5 5.0 eV
dv:Ma/MieMat/MIEHG/Values       = 2 30 30 mm
u:Ma/MieMat/MIEHG_FORWARD       = 0.8
u:Ma/MieMat/MIEHG_BACKWARD      = 0.0
u:Ma/MieMat/MIEHG_FORWARD_RATIO = 1.0

s:Ge/World/Material = "Air"
s:Ge/World/Type     = "TsBox"
d:Ge/World/HLX = 20 cm
d:Ge/World/HLY = 20 cm
d:Ge/World/HLZ = 30 cm
s:Ge/InnerMieCyl/Parent   = "World"
s:Ge/InnerMieCyl/Type     = "TsCylinder"
d:Ge/InnerMieCyl/RMax     = 4.0 cm
d:Ge/InnerMieCyl/HL       = 10 cm
s:Ge/InnerMieCyl/Material = "MieMat"
s:Ge/BarrelShell/Parent   = "World"
s:Ge/BarrelShell/Type     = "TsCylinder"
d:Ge/BarrelShell/RMin     = 4.0 cm
d:Ge/BarrelShell/RMax     = 4.1 cm
d:Ge/BarrelShell/HL       = 10 cm
s:Ge/BarrelShell/Material = "Air"

# trigger
s:So/OptSrc/Type = "Beam"
s:So/OptSrc/Component = "OptSrcGroup"
s:So/OptSrc/BeamParticle = "opticalphoton"
d:So/OptSrc/BeamEnergy = 2.5 eV
s:So/OptSrc/BeamPositionDistribution = "None"
s:So/OptSrc/BeamAngularDistribution = "None"
i:So/OptSrc/NumberOfHistoriesInRun = 1
s:Ge/OptSrcGroup/Parent = "World"
s:Ge/OptSrcGroup/Type   = "Group"
d:Ge/OptSrcGroup/TransZ = -15 cm

# GPU BEAM kernel — 100M, beam ø4mm
i:Ph/Default/GPUOptical/BeamPhotons = 1000000000
d:Ph/Default/GPUOptical/BeamCenterX = 0 mm
d:Ph/Default/GPUOptical/BeamCenterY = 0 mm
d:Ph/Default/GPUOptical/BeamCenterZ = -150 mm
u:Ph/Default/GPUOptical/BeamDirX = 0
u:Ph/Default/GPUOptical/BeamDirY = 0
u:Ph/Default/GPUOptical/BeamDirZ = 1
d:Ph/Default/GPUOptical/BeamEnergy = 2.5 eV
d:Ph/Default/GPUOptical/BeamPosCutoffX = 2.0 mm
d:Ph/Default/GPUOptical/BeamPosCutoffY = 2.0 mm
i:Ph/Default/GPUOptical/EventBatchSize = 5000000

i:Sc/Barrel/RBins   = 1
i:Sc/Barrel/PhiBins = 180
i:Sc/Barrel/ZBins   = 200
s:Sc/Barrel/Component                  = "BarrelShell"
sv:Sc/Barrel/OnlyIncludeParticlesNamed = 1 "opticalphoton"
b:Sc/Barrel/OutputToConsole            = "False"
s:Sc/Barrel/Quantity   = "GPUOpticalPhotonFluence"
s:Sc/Barrel/OutputType = "csv"
s:Sc/Barrel/OutputFile = "../results/spread_m30_barrel_GPU"
s:Sc/Barrel/IfOutputFileAlreadyExists  = "Overwrite"

# --- add x-z box scorer (multi-scorer fix: barrel + xz in one run) ---
s:Ge/ScoreXZ/Parent = "World"
s:Ge/ScoreXZ/Type = "TsBox"
b:Ge/ScoreXZ/IsParallel = "True"
d:Ge/ScoreXZ/HLX = 45 mm
d:Ge/ScoreXZ/HLY = 45 mm
d:Ge/ScoreXZ/HLZ = 110 mm
s:Sc/XZ/Quantity = "GPUOpticalPhotonFluence"
s:Sc/XZ/Component = "ScoreXZ"
sv:Sc/XZ/OnlyIncludeParticlesNamed = 1 "opticalphoton"
i:Sc/XZ/XBins = 120
i:Sc/XZ/YBins = 1
i:Sc/XZ/ZBins = 300
b:Sc/XZ/OutputToConsole = "False"
s:Sc/XZ/OutputType = "csv"
s:Sc/XZ/OutputFile = "../results/spread_m30_xz_GPU"
s:Sc/XZ/IfOutputFileAlreadyExists = "Overwrite"

# --- z=-50 transverse x-y cross-section (GPU/CPU difference map) ---
s:Ge/ScoreXY/Parent = "World"
s:Ge/ScoreXY/Type = "TsBox"
b:Ge/ScoreXY/IsParallel = "True"
d:Ge/ScoreXY/HLX = 45 mm
d:Ge/ScoreXY/HLY = 45 mm
d:Ge/ScoreXY/HLZ = 1 mm
d:Ge/ScoreXY/TransZ = -50 mm
s:Sc/XY/Quantity = "GPUOpticalPhotonFluence"
s:Sc/XY/Component = "ScoreXY"
sv:Sc/XY/OnlyIncludeParticlesNamed = 1 "opticalphoton"
i:Sc/XY/XBins = 90
i:Sc/XY/YBins = 90
i:Sc/XY/ZBins = 1
b:Sc/XY/OutputToConsole = "False"
s:Sc/XY/OutputType = "csv"
s:Sc/XY/OutputFile = "../results/spread_m30_xy50_GPU"
s:Sc/XY/IfOutputFileAlreadyExists = "Overwrite"
