# mfp=30 weak fog — barrel φ-z profile (CPU g4optical, thread 20). Beam ø4mm, 100M.
s:Ph/ListName     = "Optical"
s:Ph/Optical/Type = "Geant4_Modular"
sv:Ph/Optical/Modules = 2 "g4em-standard_opt4" "g4optical"
i:Ts/NumberOfThreads = 20
i:Ts/Seed = 42
b:Ts/UseQt = "False"
b:Gr/Enable = "False"
b:Ts/QuitIfManyHistoriesSeemAnomalous = "False"
i:Ts/ShowHistoryCountAtInterval = 1000000000

dv:Ma/Air/RIndex/Energies = 2 1.5 5.0 eV
uv:Ma/Air/RIndex/Values   = 2 1.0 1.0
dv:Ma/Air/AbsLength/Energies = 2 1.5 5.0 eV
dv:Ma/Air/AbsLength/Values   = 2 1e6 1e6 cm

sv:Ma/MieMat/Components = 1 "Hydrogen"
uv:Ma/MieMat/Fractions  = 1 1.0
d:Ma/MieMat/Density     = 0.001 g/cm3
b:Ma/MieMat/EnableOpticalProperties = "True"
dv:Ma/MieMat/RIndex/Energies = 2 1.5 5.0 eV
uv:Ma/MieMat/RIndex/Values   = 2 1.0 1.0
dv:Ma/MieMat/AbsLength/Energies = 2 1.5 5.0 eV
dv:Ma/MieMat/AbsLength/Values   = 2 1e6 1e6 cm
dv:Ma/MieMat/MIEHG/Energies     = 2 1.5 5.0 eV
dv:Ma/MieMat/MIEHG/Values       = 2 30 30 mm
u:Ma/MieMat/MIEHG_FORWARD       = 0.8
u:Ma/MieMat/MIEHG_BACKWARD      = 0.0
u:Ma/MieMat/MIEHG_FORWARD_RATIO = 1.0

s:Ge/World/Material = "Air"
s:Ge/World/Type     = "TsBox"
d:Ge/World/HLX = 20 cm
d:Ge/World/HLY = 20 cm
d:Ge/World/HLZ = 30 cm
s:Ge/InnerMieCyl/Parent   = "World"
s:Ge/InnerMieCyl/Type     = "TsCylinder"
d:Ge/InnerMieCyl/RMax     = 4.0 cm
d:Ge/InnerMieCyl/HL       = 10 cm
s:Ge/InnerMieCyl/Material = "MieMat"
s:Ge/BarrelShell/Parent   = "World"
s:Ge/BarrelShell/Type     = "TsCylinder"
d:Ge/BarrelShell/RMin     = 4.0 cm
d:Ge/BarrelShell/RMax     = 4.1 cm
d:Ge/BarrelShell/HL       = 10 cm
s:Ge/BarrelShell/Material = "Air"

# source — pencil ø4mm, +z, z=-150mm, 100M
s:So/OptSrc/Type = "Beam"
s:So/OptSrc/Component = "OptSrcGroup"
s:So/OptSrc/BeamParticle = "opticalphoton"
s:So/OptSrc/BeamPositionDistribution = "Flat"
s:So/OptSrc/BeamPositionCutoffShape  = "Rectangle"
d:So/OptSrc/BeamPositionCutoffX = 2.0 mm
d:So/OptSrc/BeamPositionCutoffY = 2.0 mm
d:So/OptSrc/BeamEnergy = 2.5 eV
u:So/OptSrc/BeamEnergySpread = 0.0
s:So/OptSrc/BeamAngularDistribution = "None"
i:So/OptSrc/NumberOfHistoriesInRun = 1000000000
s:Ge/OptSrcGroup/Parent = "World"
s:Ge/OptSrcGroup/Type   = "Group"
d:Ge/OptSrcGroup/TransZ = -15 cm

i:Sc/Barrel/RBins   = 1
i:Sc/Barrel/PhiBins = 180
i:Sc/Barrel/ZBins   = 200
s:Sc/Barrel/Component                  = "BarrelShell"
sv:Sc/Barrel/OnlyIncludeParticlesNamed = 1 "opticalphoton"
b:Sc/Barrel/OutputToConsole            = "False"
s:Sc/Barrel/Quantity   = "Fluence"
s:Sc/Barrel/OutputType = "csv"
s:Sc/Barrel/OutputFile = "../results/spread_m30_barrel_CPU"
s:Sc/Barrel/IfOutputFileAlreadyExists  = "Overwrite"

# --- z=-50 transverse x-y cross-section (GPU/CPU difference map) ---
s:Ge/ScoreXY/Parent = "World"
s:Ge/ScoreXY/Type = "TsBox"
b:Ge/ScoreXY/IsParallel = "True"
d:Ge/ScoreXY/HLX = 45 mm
d:Ge/ScoreXY/HLY = 45 mm
d:Ge/ScoreXY/HLZ = 1 mm
d:Ge/ScoreXY/TransZ = -50 mm
s:Sc/XY/Quantity = "Fluence"
s:Sc/XY/Component = "ScoreXY"
sv:Sc/XY/OnlyIncludeParticlesNamed = 1 "opticalphoton"
i:Sc/XY/XBins = 90
i:Sc/XY/YBins = 90
i:Sc/XY/ZBins = 1
b:Sc/XY/OutputToConsole = "False"
s:Sc/XY/OutputType = "csv"
s:Sc/XY/OutputFile = "../results/spread_m30_xy50_CPU"
s:Sc/XY/IfOutputFileAlreadyExists = "Overwrite"
